
<ReactionScheme>
<!-- First version of merges Gq Gs coupled pathway reactions
     when reactions differ between the models, notes indicate which was source
     Either StriatumCRCNS/StochasticSP1/MSPNfinalxml/MSPNreactions_4spine_new50.xml for Gs
     or MURI/BoHung/FinalMarch2012/mglu_2ag_reac12mar20desens025.xml for Gq
phosphatase reactions take from revision of Gs to improve Ca dep dphos of Dp32-->

<!-- Molecules species and diffusion constants -->


<Specie name="Cof" id="Cof" kdiff="5.77" kdiffunit="mu2/s"  />
<Specie name="pCof" id="pCof"  kdiff="22.91" kdiffunit="mu2/s"/>
<Specie name="pLIMKCof" id="pLIMKCof"  kdiff="0" kdiffunit="mu2/s"/>
<Specie name="LIMK" id="LIMK" kdiff="6.7" kdiffunit="mu2/s"/>


<Specie name="pLIMK" id="pLIMK" kdiff="14.50" kdiffunit="mu2/s"   />
<Specie name="RacPAKLIMK" id="RacPAKLIMK" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="RacPAK" id="RacPAK" kdiff="7.1" kdiffunit="mu2/s"/>
<Specie name="buff_Rac"        id="buff_Rac"       kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="buff_RacPAK"        id="buff_RacPAK"       kdiff="0"     kdiffunit="mu2/s"/>


<Specie name="CaNCamCa4"        id="CaNCamCa4"       kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="buff_CaN"        id="buff_CaN"       kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="buff_CaNCamCa4"        id="buff_CaNCamCa4"       kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="CaNCamCa4pSSH"        id="CaNCamCa4pSSH"       kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="pSSH"        id="pSSH"       kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="SSH" id="SSH" kdiff="5.6" kdiffunit="mu2/s"/>
<Specie name="SSHpLIMK" id="SSHpLIMK" kdiff="0"  kdiffunit="mu2/s"/>
<Specie name="SSHpCof" id="SSHpCof" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="RacPAKSSH" id="RacPAKSSH" kdiff="0" kdiffunit="mu2/s"/>
       
<!--****************************************************************************
Now, the reactions themselves
****************************************************************************-->

<!--LIMK activated by PAK-->
<!--PAK+LIMK <->pLIMK+PAK-->
<Reaction id="RacPAK+LIMK--LIMKRacPAK" name="RacPAK+LIMK--LIMKRacPAK">
<Reactant specieID="RacPAK"/>
<Reactant specieID="LIMK"/>
<Product specieID="RacPAKLIMK"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.000102394 </forwardRate>
<reverseRate> 0.00585221 </reverseRate>

</Reaction>


<Reaction id="RacPAK+LIMK--RacPAK+pLIMK" name="RacPAK+LIMK--pLIMK+RacPAK">
<Reactant specieID="RacPAKLIMK"/>
<Product specieID="pLIMK"/>
<Product specieID="RacPAK"/>

<forwardRate> 0.00109424 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>


<!--LIMK inactivation -->
<!--pLIMK+LIMK <->LIMK-->
<Reaction id="pLIMK--LIMK" name="pLIMK--LIMK">
<Reactant specieID="pLIMK"/>
<Product specieID="LIMK"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.01 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>



<!-- CaN activate SSH-->
<!--  CaNCam+pSSH <->CaNCam+SSH       -->
<Reaction name = "CaNCamCa4+pSSH--SSH" id="CaNCamCa4+pSSH--SSH">
        <Reactant specieID="pSSH"                    />
        <Reactant specieID="CaNCamCa4"                   />
        <Product  specieID="CaNCamCa4pSSH"                />

        <forwardRate> 6.21711e-06 </forwardRate>
        <reverseRate> 0.0124667 </reverseRate>
</Reaction>

<!--  CaNCam+pSSH <->CaNCam+SSH       -->
<Reaction name = "CaNCampSSH--SSH" id="CaNCampSSH--SSH">
        <Reactant specieID="CaNCamCa4pSSH"                    />
        <Product  specieID="CaNCamCa4"                />
        <Product  specieID="SSH"                />
	
        <forwardRate> 0.000240287 </forwardRate>
        <reverseRate> 0 </reverseRate>
</Reaction>

<!-- CaN inactivate by buff-->

<Reaction name = "buff_CaN--buff_CaNCamCa4" id="buff_CaN--buff_CaNCamCa4">
        <Reactant specieID="buff_CaN"                    />
        <Reactant specieID="CaNCamCa4"                    />
	<Product  specieID="buff_CaNCamCa4"                />

        <forwardRate> 0.1e-03 </forwardRate>
        <reverseRate> 0 </reverseRate>
</Reaction>

<!-- RacPAK inactivate by buff-->

<Reaction name = "buff_Rac--buff_RacPAK" id="buff_Rac--buff_RacPAK">
        <Reactant specieID="buff_Rac"                    />
        <Reactant specieID="RacPAK"                    />
	<Product  specieID="buff_RacPAK"                />

        <forwardRate> 1e-03 </forwardRate>
        <reverseRate> 0 </reverseRate>
</Reaction>


<!--PAK inactivate SSH through phosphorylation-->
<Reaction id="RacPAK+SSH--SSHRacPAK" name="RacPAK+SSH--SSHRacPAK">
<Reactant specieID="RacPAK"/>
<Reactant specieID="SSH"/>
<Product specieID="RacPAKSSH"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.105862 </forwardRate>
<reverseRate> 0.49049 </reverseRate>
</Reaction>

<Reaction id="RacPAKSSH--pSSH+RacPAK" name="RacPAK+SSH--pSSH+RacPAK">
<Reactant specieID="RacPAKSSH"/>
<Product specieID="pSSH"/>
<Product specieID="RacPAK"/>

<forwardRate> 0.0119511 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>



<!--LIMK inactivation Cof-->
<!--Cof+pLIMK <->pLIMK+pCof-->
<Reaction id="Cof+pLIMK--pLIMKCof" name="Cof+pLIMK--pLIMKCof">
<Reactant specieID="Cof"/>
<Reactant specieID="pLIMK"/>
<Product specieID="pLIMKCof"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 5.29618e-06 </forwardRate>
<reverseRate> 0.000302187 </reverseRate>

</Reaction>

<Reaction id="CofpLIMK--pCof+pLIMK" name="Cof+pLIMK--pLIMK+pCof">
<Reactant specieID="pLIMKCof"/>
<Product specieID="pLIMK"/>
<Product specieID="pCof"/>

<forwardRate> 1.59464e-06</forwardRate>
<reverseRate> 0 </reverseRate>
</Reaction>


<!--SSH inactivation LIMK-->
<!--pLIMK+SSH <->SSH+LIMK-->
<Reaction id="pLIMK+SSH--SSHpLIMK" name="pLIMK+SSH--SSHpLIMK">
<Reactant specieID="pLIMK"/>
<Reactant specieID="SSH"/>
<Product specieID="SSHpLIMK"/>


<forwardRate> 0.00877021 </forwardRate>
<reverseRate> 0.332232 </reverseRate>

</Reaction>


<Reaction id="pLIMKSSH--pLIMK+SSH" name="pLIMK+SSH--SSH+LIMK">
<Reactant specieID="SSHpLIMK"/>
<Product specieID="SSH"/>
<Product specieID="LIMK"/>

<forwardRate> 0.0121175 </forwardRate>
<reverseRate> 0 </reverseRate>
</Reaction>



<!--SSH activation Cof-->
<!--Cof+SSH <->SSH+pCof-->
<Reaction id="pCof+SSH--SSHpCof" name="pCof+SSH--SSHpCof">
<Reactant specieID="pCof"/>
<Reactant specieID="SSH"/>
<Product specieID="SSHpCof"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 3.69177e-05 </forwardRate>
<reverseRate> 0.000121177 </reverseRate>

</Reaction>


<Reaction id="pCofSSH--pCof+SSH" name="pCof+SSH--SSH+Cof">
<Reactant specieID="SSHpCof"/>
<Product specieID="SSH"/>
<Product specieID="Cof"/>


<forwardRate> 3.08117e-05 </forwardRate>
<reverseRate> 0 </reverseRate>
</Reaction>



</ReactionScheme>
