<ReactionScheme>
  <!-- fit 662 -->
<!-- First version of merges Gq Gs coupled pathway reactions
     when reactions differ between the models, notes indicate which was source.
     Either StriatumCRCNS/StochasticSP1/MSPNfinalxml/MSPNreactions_4spine_new50.xml for Gs
     or MURI/BoHung/FinalMarch2012/mglu_2ag_reac12mar20desens025.xml for Gq
phosphatase reactions take from revision of Gs to improve Ca dep dphos of Dp32-->

<!-- Molecules species and diffusion constants -->
<!-- Cofilin signaling pathway reaction subset -->
<Specie name="PP1" id="PP1" kdiff="0.0" kdiffunit="mu2/s"/>
<Specie name="pKalPP1" id="pKalPP1" kdiff="0.0" kdiffunit="mu2/s"/>
<Specie name="pKal" id="pKal" kdiff="0.0" kdiffunit="mu2/s"/>
<Specie name="Kal" id="Kal" kdiff="0.0" kdiffunit="mu2/s"/>
<Specie name="pKalRac" id="pKalRac" kdiff="0.0" kdiffunit="mu2/s"/>

<!-- Rac pathway -->
<Specie name="RacGTP" id="RacGTP" kdiff="0.25" kdiffunit="mu2/s"/>
<Specie name="RacGDP" id="RacGDP" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="RacGap" id="RacGap" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Gap" id="Gap" kdiff="6.8" kdiffunit="mu2/s"/>

<!-- PAK pathway -->
<Specie name="PAK" id="PAK" kdiff="7.1" kdiffunit="mu2/s"/>
<Specie name="RacPAKLIMK" id="RacPAKLIMK" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="RacPAK" id="RacPAK" kdiff="0.0" kdiffunit="mu2/s"/>
<Specie name="RacPAKGap" id="RacPAKGap" kdiff="0.0" kdiffunit="mu2/s"/>

<!-- LIMK pathway -->
<Specie name="LIMK" id="LIMK" kdiff="6.7" kdiffunit="mu2/s"/>
<Specie name="pLIMK" id="pLIMK" kdiff="6.7" kdiffunit="mu2/s"/>
<Specie name="SSHpLIMK" id="SSHpLIMK" kdiff="0" kdiffunit="mu2/s"/>

<!-- SSH pathway -->
<Specie name="pSSH" id="pSSH" kdiff="0.0" kdiffunit="mu2/s"/>
<Specie name="SSH" id="SSH" kdiff="0.0" kdiffunit="mu2/s"/>
<Specie name="RacPAKSSH" id="RacPAKSSH" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="CaNCamCa4pSSH" id="CaNCamCa4pSSH" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Y" id="Y" kdiff="0.0" kdiffunit="mu2/s"/>
<Specie name="YCaNCamCa4" id="YCaNCamCa4" kdiff="0.0" kdiffunit="mu2/s"/>

<!-- CaN pathway -->

<Specie name="CaNCamCa4" id="CaNCamCa4" kdiff="0" kdiffunit="mu2/s"/>

<!-- Cof pathway -->
<Specie name="Cof" id="Cof" kdiff="0.01" kdiffunit="mu2/s"/>
<Specie name="pCof" id="pCof" kdiff="0.01" kdiffunit="mu2/s"/>
<Specie name="pLIMKCof" id="pLIMKCof" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="SSHpCof" id="SSHpCof" kdiff="0" kdiffunit="mu2/s"/>

<!-- actin binding to Cof -->    
<Specie name="actin" id="actin" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Cofactin" id="Cofactin" kdiff="0" kdiffunit="mu2/s"/>


<!--****************************************************************************
Now, the reactions themselves
****************************************************************************-->

    
<!--Y+CaNCamCa4<->YCaNCamCa4-->
<Reaction id="Y--YCaNCamCa4" name="Y+CaNCamCa4--YCaNCamCa4">
<Reactant specieID="CaNCamCa4"/>
<Reactant specieID="Y"/>
<Product specieID="YCaNCamCa4"/>

<forwardRate> 0.1e-9 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>

<!--PP1 inactivates Kal -->
<!--PP1+Kal<->PP1 +pKal-->
<Reaction id="pKal+PP1--pKalPP1" name="pKal+PP1--pKalPP1">
<Reactant specieID="pKal"/>
<Reactant specieID="PP1"/>
<Product specieID="pKalPP1"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.00005e-3 </forwardRate>
<reverseRate> 0.04e-3 </reverseRate>

</Reaction>
<Reaction id="pKalPP1--Kal+PP1" name="pKalPP1--Kal+PP1">
<Reactant specieID="pKalPP1"/>
<Product specieID="PP1"/>
<Product specieID="Kal"/>

<forwardRate> 0.01e-3 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>


<!--RacGDP+ pKal<->RacGTP + pKal-->
<Reaction id="RacGDP+Kal--pKalRacGDP" name="RacGDP+pKal--pKalRacGDP">
<Reactant specieID="pKal"/>
<Reactant specieID="RacGDP"/>
<Product specieID="pKalRac"/>

<forwardRate>7.318656307569069e-06</forwardRate>
<reverseRate>0.0011163590504293611</reverseRate>

</Reaction>

<Reaction id="pKalRacGDP--pKal+RacGTP" name="pKalRacGDP--pKal+RacGTP">
<Reactant specieID="pKalRac"/>
<Product specieID="RacGTP"/>
<Product specieID="pKal"/>

<forwardRate>0.0002790897626073403</forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>


<!--RacGTP inactivation -->
<!--RacGTP+ Gap<->RacGDP + Gap-->
<Reaction id="RacGTP+Gap--GapRacGTP" name="RacGTP+Gap--GapRacGTP">
<Reactant specieID="Gap"/>
<Reactant specieID="RacGTP"/>
<Product specieID="RacGap"/>


<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.00022e-3 </forwardRate>
<reverseRate> 4.82e-3</reverseRate>

</Reaction>

<Reaction id="GapRacGTP--RacGDP+Gap" name="GapRacGTP--RacGDP+Gap">
<Reactant specieID="RacGap"/>
<Product specieID="RacGDP"/>
<Product specieID="Gap"/>

<forwardRate> 1.205e-3 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>


<!--RacGTP activate PAK-->
<!--RacGTP+PAK <->RacPAK-->
<Reaction id="RacGTP+PAK--RacGTPPAK" name="RacGTP+PAK--RacGTPPAK">
<Reactant specieID="PAK"/>
<Reactant specieID="RacGTP"/>
<Product specieID="RacPAK"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate>0.00013805261294491151</forwardRate>
<reverseRate>0.0007656916634588156</reverseRate>

</Reaction>

<!-- intrinsic inactivation of PAK-->
<!--RacPAK<->RacGDP+PAK-->
<Reaction id="RacPAK--RacGDP+PAK" name="RacPAK--RacGDP+PAK">
<Reactant specieID="RacPAK"/>
<Product specieID="RacGDP"/>
<Product specieID="RacPAK"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate>0.1e-6</forwardRate>
<reverseRate>0</reverseRate>

</Reaction>

<!--RacPAK inactivation -->
<!--RacPAK+ Gap<->RacGDP + Gap+PAK-->
<Reaction id="RacPAK+Gap--GapRacPAK" name="RacPAK+Gap--GapRacPAK">
<Reactant specieID="Gap"/>
<Reactant specieID="RacPAK"/>
<Product specieID="RacPAKGap"/>

<forwardRate> 0</forwardRate>
<!--forwardRate> 0.00022e-3 </forwardRate-->
<reverseRate> 4.82e-3</reverseRate>

</Reaction>

<Reaction id="GapRacPAK--RacGDP+Gap" name="GapRacPAK--RacGDP+Gap">
<Reactant specieID="RacPAKGap"/>
<Product specieID="RacGDP"/>
<Product specieID="PAK"/>
<Product specieID="Gap"/>

<forwardRate> 0.01205e-3 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>

<!--LIMK activated by PAK-->
<!--PAK+LIMK <->pLIMK+PAK-->
<Reaction id="RacPAK+LIMK--LIMKRacPAK" name="RacPAK+LIMK--LIMKRacPAK">
<Reactant specieID="RacPAK"/>
<Reactant specieID="LIMK"/>
<Product specieID="RacPAKLIMK"/>

<forwardRate>0.004830442450331328</forwardRate>
<reverseRate>0.6022296414065768</reverseRate>

</Reaction>

<Reaction id="LIMKRacPAK--RacPAK+pLIMK" name="LIMKRacPAK--RacPAK+pLIMK">
<Reactant specieID="RacPAKLIMK"/>
<Product specieID="pLIMK"/>
<Product specieID="RacPAK"/>

<forwardRate>0.1505574103516442</forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>


<!--SSH inactivation LIMK-->
<!--pLIMK+SSH <->SSH+LIMK-->
<Reaction id="pLIMK+SSH--SSHpLIMK" name="pLIMK+SSH--SSHpLIMK">
<Reactant specieID="pLIMK"/>
<Reactant specieID="SSH"/>
<Product specieID="SSHpLIMK"/>

<forwardRate>0.0001146185469266482</forwardRate>
<reverseRate>2.1669881512096194</reverseRate>

</Reaction>


<Reaction id="SSHpLIMK--pLIMK+SSH" name="SSHpLIMK--pLIMK+SSH">
<Reactant specieID="SSHpLIMK"/>
<Product specieID="SSH"/>
<Product specieID="LIMK"/>

<forwardRate>0.5417470378024049</forwardRate>
<reverseRate> 0 </reverseRate>
</Reaction>

<!-- CaN activate SSH-->
<!--  CaNCam+pSSH <->CaNCam+SSH       -->
<Reaction name="CaNCamCa4+pSSH--CaNCamCa4pSSH" id="CaNCamCa4+pSSH--CaNCamCa4pSSH">
        <Reactant specieID="pSSH"/>
        <Reactant specieID="CaNCamCa4"/>
        <Product specieID="CaNCamCa4pSSH"/>

        <forwardRate>5.474783283495908e-05</forwardRate>
        <reverseRate>0.01052109387421659</reverseRate>
</Reaction>

<!--  CaNCam+pSSH <->CaNCam+SSH       -->
<Reaction name="CaNCamCa4pSSH--SSH+CaNCamCa4" id="CaNCamCa4pSSH--SSH+CaNCamCa4">
        <Reactant specieID="CaNCamCa4pSSH"/>
        <Product specieID="CaNCamCa4"/>
        <Product specieID="SSH"/>
	
        <forwardRate>0.0026302734685541476</forwardRate>
        <reverseRate> 0 </reverseRate>
</Reaction>

<!--PAK inactivate SSH through phosphorylation-->
<Reaction id="RacPAK+SSH--SSHRacPAK" name="RacPAK+SSH--SSHRacPAK">
<Reactant specieID="RacPAK"/>
<Reactant specieID="SSH"/>
<Product specieID="RacPAKSSH"/>

<forwardRate>1.0296968726502994e-05</forwardRate>
<reverseRate>2.4648628277671842</reverseRate>
</Reaction>

<Reaction id="SSHRacPAK--pSSH+RacPAK" name="SSHRacPAK--pSSH+RacPAK">
<Reactant specieID="RacPAKSSH"/>
<Product specieID="pSSH"/>
<Product specieID="RacPAK"/>

<forwardRate>0.6162157069417961</forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>

<!--LIMK inactivation Cof-->
<!--Cof+pLIMK <->pLIMK+pCof-->
<Reaction id="Cof+pLIMK--pLIMKCof" name="Cof+pLIMK--pLIMKCof">
<Reactant specieID="Cof"/>
<Reactant specieID="pLIMK"/>
<Product specieID="pLIMKCof"/>

<forwardRate>0.001976033161267065</forwardRate>
<reverseRate>0.9265303170766918</reverseRate>

</Reaction>

<Reaction id="pLIMKCof--pCof+pLIMK" name="pLIMKCof--pCof+pLIMK">
<Reactant specieID="pLIMKCof"/>
<Product specieID="pLIMK"/>
<Product specieID="pCof"/>

<forwardRate>0.23163257926917294</forwardRate>
<reverseRate> 0 </reverseRate>
</Reaction>


<!--SSH activation Cof-->
<!--Cof+SSH <->SSH+pCof-->
<Reaction id="pCof+SSH--SSHpCof" name="pCof+SSH--SSHpCof">
<Reactant specieID="pCof"/>
<Reactant specieID="SSH"/>
<Product specieID="SSHpCof"/>

<forwardRate>1.9875041482484885e-05</forwardRate>
<reverseRate>0.524562632471233</reverseRate>

</Reaction>

<Reaction id="SSHpCof--Cof+SSH" name="pCof+SSH--Cof+SSH">
<Reactant specieID="SSHpCof"/>
<Product specieID="SSH"/>
<Product specieID="Cof"/>

<forwardRate>0.13114065811780826</forwardRate>
<reverseRate> 0 </reverseRate>
</Reaction>

<!--Actin binding to Cof -->
<Reaction id="actin+Cof--Cofactin" name="actin+Cof--Cofactin">
<Reactant specieID="actin"/>
<Reactant specieID="Cof"/>
<Product specieID="Cofactin"/>

<forwardRate>1.665604539598831e-06</forwardRate>
<reverseRate>0.00918627101236707</reverseRate>
</Reaction>



</ReactionScheme>
