

<ReactionScheme>
<!-- First version of merges Gq Gs coupled pathway reactions
     when reactions differ between the models, notes indicate which was source.
     Either StriatumCRCNS/StochasticSP1/MSPNfinalxml/MSPNreactions_4spine_new50.xml for Gs
     or MURI/BoHung/FinalMarch2012/mglu_2ag_reac12mar20desens025.xml for Gq
phosphatase reactions take from revision of Gs to improve Ca dep dphos of Dp32-->

<!-- Molecules species and diffusion constants -->



<Specie kdiffunit="mu2/s" kdiff="10.18" id="Cdc42GTP" name="Cdc42GTP"/>
<Specie kdiffunit="mu2/s" kdiff="0" id="Cdc42GDP" name="Cdc42GDP"/>
<Specie kdiffunit="mu2/s" kdiff="0" id="Cdc42Gap" name="Cdc42Gap"/>
<Specie kdiffunit="mu2/s" kdiff="6.8" id="Gap" name="Gap"/>

<Specie kdiffunit="mu2/s" kdiff="5.0" id="pKalCdc42" name="pKalCdc42"/>
<Specie kdiffunit="mu2/s" kdiff="5.0" id="pKal" name="pKal"/>
<Specie kdiffunit="mu2/s" kdiff="0" id="KalCKpCamCa4" name="KalCKpCamCa4"/>
<Specie kdiffunit="mu2/s" kdiff="5.0" id="Kal" name="Kal"/>
<Specie kdiffunit="mu2/s" kdiff="5.0" id="KalPP1" name="KalPP1"/>

<!-- calcium reaction subset, to adjust for proper basal calcium -->
<!-- calcium stuff first -->
    <Specie name="Ca"                id="Ca"                kdiff="174.3" kdiffunit="mu2/s"/>
    <Specie name="Caext"             id="Caext"             kdiff="174.3" kdiffunit="mu2/s"/>
    <Specie name="CaextLeak"         id="CaextLeak"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Leak"              id="Leak"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pmca"              id="pmca"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncx"               id="ncx"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pmcaCa"            id="pmcaCa"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="Calbin"            id="Calbin"            kdiff="9.3"   kdiffunit="mu2/s"/>
    <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s"/>
    <Specie name="CB"            id="CB"            kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="CaB"      id="CaB" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="Cabuff"                id="Cabuff"                kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="Cbuff"                id="Cbuff"                kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="Cbuffslow"                id="Cbuffslow"                kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="Caextbuffslow"                id="Caextbuffslow"                kdiff="0" kdiffunit="mu2/s"/>

<!-- CaM from Gq files, with either C or N site binding first -->
    <Specie name="Cam"               id="Cam"               kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2C"           id="CamCa2C"           kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2N"           id="CamCa2N"           kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CK"                                  id="CK"                    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKp"                                 id="CKp"                   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CamCa4"                              id="CamCa4"                kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKCamCa4"                            id="CKCamCa4"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4"                           id="CKpCamCa4"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP1"                                 id="PP1"               kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="CKpPP1"                              id="CKpPP1"            kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4PP1"                        id="CKpCamCa4PP1"      kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Ip35"                                 id="Ip35"               kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Ip35PP1"                              id="Ip35PP1"            kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Ng"                                   id="Ng"                   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="NgCam"                                id="NgCam"                kdiff="0"     kdiffunit="mu2/s"/>

    <Specie name="L" id="L" kdiff="111.4" kdiffunit="mu2/s"/>
    <Specie name="LOut" id="LOut" kdiff="111.4" kdiffunit="mu2/s"/>
  <!--Added from Andy's model-->
  <Specie name="R" id="R" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Gs" id="Gs" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Gi" id="Gi" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LR" id="LR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LRGs" id="LRGs" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PKAcLR" id="PKAcLR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PKAcpLR" id="PKAcpLR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PKAcppLR" id="PKAcppLR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pLR" id="pLR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ppLR" id="ppLR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ppLRGi" id="ppLRGi" kdiff="0" kdiffunit="mu2/s"/>
  
    
  <Specie name="GsR" id="GsR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GasGTP" id="GasGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GasGDP" id="GasGDP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GaiGTP" id="GaiGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GaiGDP" id="GaiGDP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Gibg" id="Gibg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Gsbg" id="Gsbg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LRGsbg" id="LRGsbg" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="cAMP" id="cAMP" kdiff="86.4" kdiffunit="mu2/s"/>
  <Specie name="AMP" id="AMP" kdiff="84.8" kdiffunit="mu2/s"/>
  <Specie name="AC1" id="AC1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GasGTP" id="AC1GasGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GasGTPCamCa4" id="AC1GasGTPCamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GasGTPCamCa4ATP" id="AC1GasGTPCamCa4ATP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GaiGTP" id="AC1GaiGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GaiGTPCamCa4" id="AC1GaiGTPCamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GaiGTPCamCa4ATP" id="AC1GaiGTPCamCa4ATP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GasGTPGaiGTP" id="AC1GasGTPGaiGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GasGTPGaiGTPCamCa4" id="AC1GasGTPGaiGTPCamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1GsGiCamCa4ATP" id="AC1GsGiCamCa4ATP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1CamCa4" id="AC1CamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC1CamCa4ATP" id="AC1CamCa4ATP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC8" id="AC8" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC8CamCa4" id="AC8CamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="AC8CamCa4ATP" id="AC8CamCa4ATP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PDE1" id="PDE1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PDE1CamCa4" id="PDE1CamCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PDE1CamCa4cAMP" id="PDE1CamCa4cAMP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PDE4" id="PDE4" kdiff="6.0" kdiffunit="mu2/s"/>
  <Specie name="PDE4cAMP" id="PDE4cAMP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PKAcPDE4" id="PKAcPDE4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pPDE4" id="pPDE4" kdiff="6.0" kdiffunit="mu2/s"/>
  <Specie name="pPDE4cAMP" id="pPDE4cAMP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PKAc_PDE4_cAMP" id="PKAc_PDE4_cAMP" kdiff="0" kdiffunit="mu2/s"/> 
  <Specie name="PDE2" id="PDE2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PDE2cAMP" id="PDE2cAMP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PDE2cAMP2" id="PDE2cAMP2" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="PKAcAMP2"                            id="PKAcAMP2"                kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="PKAcAMP4"                            id="PKAcAMP4"                kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="PKA"                                 id="PKA"                kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="PKAc"                                id="PKAc"                kdiff="0.836"    kdiffunit="mu2/s"/>
  <Specie name="PKAr"                                id="PKAr"                kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="KalPKAc"                             id="KalPKAc"                kdiff="0"    kdiffunit="mu2/s"/>
 
<!--****************************************************************************
Now, the reactions themselves
****************************************************************************-->
<!--activation of Kal-->
<!--CamKII to Kal -->
<!--CamKII+Kal<->CamKII +pKal-->
<Reaction id="Kal+CKpCamCa4--KalCKpCamCa4" name="Kal+CKpCamCa4--KalCKpCamCa4">
<Reactant specieID="Kal"/>
<Reactant specieID="CKpCamCa4"/>
<Product specieID="KalCKpCamCa4"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.00005e-3 </forwardRate>
<reverseRate> 0.04e-3 </reverseRate>

</Reaction>
<Reaction id="KalCKpCamCa4--pKal+CKpCamCa4" name="KalCKpCamCa4--pKal+CKpCamCa4">
<Reactant specieID="KalCKpCamCa4"/>
<Product specieID="CKpCamCa4"/>
<Product specieID="pKal"/>

<forwardRate> 0.01e-3 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>

<!--PKA to Kal -->
<!--PKAc+Kal<->PKAc +pKal-->
<Reaction id="Kal+PKAc--KalPKAc" name="Kal+PKAc--KalPKAc">
<Reactant specieID="Kal"/>
<Reactant specieID="PKAc"/>
<Product specieID="KalPKAc"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.00005e-3 </forwardRate>
<reverseRate> 0.04e-3 </reverseRate>

</Reaction>
<Reaction id="KalPKAc--pKal+PKAc" name="KalPKAc--pKal+PKAc">
<Reactant specieID="KalPKAc"/>
<Product specieID="PKAc"/>
<Product specieID="pKal"/>

<forwardRate> 0.01e-3 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>

<!--pKal inactivation by PP1-->
<!--pKal+ PP1<->Kal +PP1-->
<Reaction id="pKal+PP1--Kal" name="pKal--Kal+PP1">
  <Reactant specieID="pKal"/>
  <Reactant specieID="PP1"/>
  <Product specieID="KalPP1"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.00005e-3 </forwardRate>
<reverseRate> 0.04e-3</reverseRate>

</Reaction>
<Reaction id="pKal+PP1--Kal" name="pKal--Kal+PP1">
  <Reactant specieID="KalPP1"/>
  <Product specieID="PP1"/>
  <Product specieID="pKal"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.01e-3 </forwardRate>
<reverseRate> 0</reverseRate>

</Reaction>

<!--Cdc42GTP activation -->
<!--Cdc42GDP+ pKal<->Cdc42GTP + pKal-->
<Reaction id="Cdc42GDP+pKal--Cdc42GDPpKal" name="Cdc42GDP+pKal--pKalCdc42GDP">
<Reactant specieID="pKal"/>
<Reactant specieID="Cdc42GDP"/>
<Product specieID="pKalCdc42"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.0001875e-3 </forwardRate>
<reverseRate> 0.15e-3 </reverseRate>

</Reaction>

<Reaction id="Cdc42GDP+pKal--Cdc42GTP+pKal" name="Cdc42GDP+pKal--pKal+Cdc42GTP">
<Reactant specieID="pKalCdc42"/>
<Product specieID="Cdc42GTP"/>
<Product specieID="pKal"/>

<forwardRate> 0.0375e-3 </forwardRate>
<reverseRate> 0 </reverseRate>

</Reaction>


<!--Cdc42GTP inactivation with GAP-->
<!--Cdc42GTP+ Gap<->Cdc42GDP + Gap-->
<Reaction id="Cdc42GTP+Gap--Cdc42GTPGap" name="Cdc42GTP+Gap--GapCdc42GTP">
<Reactant specieID="Gap"/>
<Reactant specieID="Cdc42GTP"/>
<Product specieID="Cdc42Gap"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.0569e-3 </forwardRate>
<reverseRate> 140.26e-3</reverseRate>

</Reaction>

<Reaction id="Cdc42GTP+Gap--Cdc42GTPGap" name="Cdc42GTP+Gap--Gap+Cdc42GDP">
<Reactant specieID="Cdc42Gap"/>
<Product specieID="Cdc42GDP"/>
<Product specieID="Gap"/>

<forwardRate> 35.065e-3 </forwardRate>
<reverseRate> 0e-3 </reverseRate>

</Reaction>

<!--Cdc42GTP inactivation -->
<!--Cdc42GTP<->Cdc42GD-->
<Reaction id="Cdc42GTP--Cdc42GTP" name="Cdc42GTP--Cdc42GDP">
<Reactant specieID="Cdc42GTP"/>
<Product specieID="Cdc42GDP"/>

<!--forwardRate> 0</forwardRate-->
<forwardRate> 0.00056e-3 </forwardRate>
<reverseRate> 0</reverseRate>

</Reaction>


<!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
    <Reaction name = "Ca_pump1a" id="Ca_pump1a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="pmca"/>
	<Product specieID="pmcaCa"/>

	<forwardRate>0.5e-4</forwardRate>
	<reverseRate>0.007</reverseRate>
	
    </Reaction>

<!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
    <Reaction name = "Ca_pump1b" id="Ca_pump1b">
	<Reactant specieID="pmcaCa"/>
	<Product specieID="pmca"/>
	<Product specieID="Caext"/>

	<forwardRate>0.0035</forwardRate>
	<reverseRate>0</reverseRate>

    </Reaction>

<!-- iii: Ca pump low affinity -   7 Ca + ncx <-> ncxCa  SAME-->
    <Reaction name = "Ca_pump2a" id="Ca_pump2a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="ncx"/>
	<Product specieID="ncxCa"/>

	<forwardRate>1.68e-5</forwardRate>
	<reverseRate>0.0112</reverseRate>

    </Reaction>

<!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
    <Reaction name = "Ca_pump2b" id="Ca_pump2b">
	<Reactant specieID="ncxCa"/>
	<Product specieID="ncx"/>
	<Product specieID="Caext"/>

	<forwardRate>0.0056</forwardRate>
	<reverseRate>0</reverseRate>
	
    </Reaction>
    
<!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="Caext"/>
	<Reactant specieID="Leak"/>
	<Product specieID="CaextLeak"/>

        <forwardRate>1.5e-6</forwardRate>
	<reverseRate>1.1e-3</reverseRate>

    </Reaction>

<!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaextLeak"/>
	<Product specieID="Ca"/>
	<Product specieID="Leak"/>

        <forwardRate>1.1e-3</forwardRate>
	<reverseRate>0</reverseRate>

    </Reaction>
<!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
    <Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="Calbin"/>
        <Product specieID="CalbinC"/>

        <forwardRate>2.8e-5</forwardRate>
        <reverseRate>0.0196</reverseRate>
       
</Reaction>

<!-- viii: Ca fixBuffer    Ca + CB <-> CaB  SAME-->
    <Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="CB"/>
        <Product specieID="CaB"/>
	
	<!--forwardRate>0.02e-3</forwardRate-->
        <forwardRate>0</forwardRate>
        <reverseRate>0</reverseRate>
	<!--reverseRate>1</reverseRate-->
</Reaction>


<!--1A) Cam  + 2Ca <-> CamCa2C GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamC_bind" id="CamC_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2C"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>
	
    </Reaction>
  
<!--2A) CamCa2C  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2C_bind" id="CamCa2C_bind">
	<Reactant specieID="CamCa2C"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>
	
    </Reaction>

<!--1B) Cam  + 2Ca <-> CamCa2N GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamN_bind" id="CamN_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>

    </Reaction>

<!--2B) CamCa2N  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2N_bind" id="CamCa2N_bind">
	<Reactant specieID="CamCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>

    </Reaction>


<!-- New CamKII part -->

  <!--1) CamCa4 + CK <-> CKCamCa4  -->
    <Reaction name = "CK bind" id="CK-Cam_bind">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCamCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 1.5e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
    </Reaction>

<!--2a) 2 CKCamCa4  <-> 1  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow2">
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"          />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.83119676007e-10 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2b)  3 CKCamCa4  <-> 2 CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow3">
        <Reactant specieID="CKCamCa4"  power="3"        />
        <Product  specieID="CKCamCa4"  power="2"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.55792141502e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2c) 4 CKCamCa4  <-> 3  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow4">
        <Reactant specieID="CKCamCa4"  power="4"        />
        <Product  specieID="CKCamCa4"   power="3"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 2.23694832822e-16 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2d)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"           />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 1.10450093247e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2e)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK1_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"         />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 3.0330636368e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2f)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow1">
        <Reactant specieID="CKpCamCa4"   power="2"         />
        <Reactant specieID="CKCamCa4"     power="2"     />
        <Product  specieID="CKpCamCa4" power="3"         />
        <Product  specieID="CKCamCa4"          />

        <forwardRate> 2.39399544094e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

    <!-- CKpCamCa4 <-> CKp + CamCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCamCa4"              />
        <Product  specieID="CamCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>

<!-- Km=5.1 uM  from foulkes et. al.,  et al., Eur. JBiochem.1983 132(309-313))
     Vmax=5.7 umol/min gives kcat=3.5 sec-1 & kb=14 sec-1 -->
    <!-- kf=0.000039,kb=0.34,kcat=0.086 /sec for CKp only from Myungs paper 2010 PloS -->
    <!-- kf=0.6e-9,kb=0.34e-3,kcat=0.086e-3 /msec for CKp and CKpCam from Myungs Stoch sims-->
   <!-- CKp + PP1 <-> CKpPP1 --> 
    <Reaction name = "CKp_bind" id="CKp_bind">
	<Reactant specieID="CKp"/>
        <Reactant specieID="PP1"/>
	<Product specieID="CKpPP1"/>

	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <!-- CKpPP1 -> PP1 + CK -->
    <Reaction name = "CKpPP1_reac" id="CKpPP1_reac">
	<Reactant specieID="CKpPP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CK"/>

	<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>

  
   <!-- CKpCamCa4 + PP1 <-> CKpCamCa4PP1 -->
    <Reaction name = "CKpCamPP1_bind" id="CKpCamPP1_bind">
	<Reactant specieID="CKpCamCa4"/>
        <Reactant specieID="PP1"/>
`	<Product specieID="CKpCamCa4PP1"/>

	
    <forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <!-- CKpCamCa4PP1 -> PP1 + CKCamCa4 -->
    
    <Reaction name = "CKpCamPP1_reac" id="CKpCamPP1_reac">
	<Reactant specieID="CKpCamCa4PP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CKCamCa4"/>

<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>


    <!-- PP1 inhibitor -->
    
 <!-- Ip35 + PP1 <-> Ip35PP1 -->
    <Reaction name = "Ip35+PP1" id="Ip35+PP1">
	<Reactant specieID="Ip35"/>
        <Reactant specieID="PP1"/>
`	<Product specieID="Ip35PP1"/>

	
    <forwardRate> 1.00e-6 </forwardRate>
        <reverseRate> 1.10e-6 </reverseRate>
    </Reaction>

    
    <!-- Ng binding to Cam -->
    
 <!-- Ng+Cam <-> NgCam -->
    <Reaction name = "Ng+Cam" id="Ng+Cam">
	<Reactant specieID="Ng"/>
        <Reactant specieID="Cam"/>
`	<Product specieID="NgCam"/>

	
    <forwardRate> 2.80e-5 </forwardRate>
        <reverseRate> 3.60e-2 </reverseRate>
    </Reaction>

<!-- G_protein part -->

    <Reaction name = "L_buffer" id="L_Buffer">
	<Reactant specieID="L"/>
	<Product specieID="LOut"/>
	<forwardRate>5e-4</forwardRate>
	<reverseRate>2e-9</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 1) L + R <-> LR    -->
    <Reaction name = "LR_bind" id="LR_bind">
	<Reactant specieID="L"/>
	<Reactant specieID="R"/>
	<Product specieID="LR"/>

	<forwardRate>0.005555e-3</forwardRate><!--ten times higer than previously-->
	<reverseRate>5e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 2) LR + Gs <-> LRGs    -->
    <Reaction name = "LRGs_bind" id="LRGs_bind">
	<Reactant specieID="LR"/>
	<Reactant specieID="Gs"/>
	<Product specieID="LRGs"/>

	<forwardRate>0.0006e-3</forwardRate>
	<reverseRate>0.001e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 3) Gs + R <-> GsR    -->
    <Reaction name = "GsR_bind" id="GsR_bind">
	<Reactant specieID="Gs"/>
	<Reactant specieID="R"/>
	<Product specieID="GsR"/>

	<forwardRate>0.00004e-3</forwardRate>
	<reverseRate>0.0003e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>


<!-- 4) GsR + L <-> LRGs    -->
    <Reaction name = "GsRL_bind" id="GsRL_bind">
	<Reactant specieID="GsR"/>
	<Reactant specieID="L"/>
	<Product specieID="LRGs"/>

	<forwardRate>0.0025e-3</forwardRate>
	<reverseRate>0.5e-3</reverseRate>
	<Q10>0.2</Q10>
</Reaction>

<!-- 5a) LRGs -> LRGsbg + GasGTP -->
    <Reaction name = "GasGTP_bind" id="GasGTP_bind">
	<Reactant specieID="LRGs"/>
	<Product specieID="LR"/>
	<Product specieID="GasGTP"/>
	<Product specieID="Gsbg"/>

	<forwardRate>20e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- AMC 06/27/12: Below are the reactions for PKA-mediated LR desensitization and subsequent Gs-to-Gi switching --> 
<!-- 5c1) LR + PKAc -> PKAcLR -->
    <Reaction name = "LR_phos" id="LR_phos">
	<Reactant specieID="LR"/>
	<Reactant specieID="PKAc"/>
	<Product specieID="PKAcLR"/>

	<forwardRate>0.008e-4</forwardRate>
	<reverseRate>44.8e-04</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 5d1) PKAcLR -> pLR + PKAc -->
    <Reaction name = "pLR_reac" id="pLR_reac">
	<Reactant specieID="PKAcLR"/>
	<Product specieID="pLR"/>
	<Product specieID="PKAc"/>

	<forwardRate>1.00e-03</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 5c2) pLR + PKAc -> PKApcLR -->
    <Reaction name = "pLR_phos" id="pLR_phos">
	<Reactant specieID="pLR"/>
	<Reactant specieID="PKAc"/>
	<Product specieID="PKAcpLR"/>

	<forwardRate>0.008e-04</forwardRate>
	<reverseRate>44.8e-04</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 5d2) PKAcpLR -> ppLR + PKAc -->
    <Reaction name = "ppLR_reac" id="ppLR_reac">
	<Reactant specieID="PKAcpLR"/>
	<Product specieID="ppLR"/>
	<Product specieID="PKAc"/>

	<forwardRate>0.01712e-03</forwardRate>
	<reverseRate>2.24e-03</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>


<!-- 5e) ppLR + Gi -> ppLRGi -->
    <Reaction name = "ppLRGi_bind" id="ppLRGi_bind">
	<Reactant specieID="ppLR"/>
	<Reactant specieID="Gi"/>
	<Product specieID="ppLRGi"/>

	<forwardRate>0.15e-3</forwardRate>
	<reverseRate>0.25e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 5f) ppLRGi -> ppLRGibg + GaiGTP -->
    <Reaction name = "GaiGTP_bind" id="GaiGTP_bind">
	<Reactant specieID="ppLRGi"/>
	<Product specieID="ppLR"/>
	<Product specieID="GaiGTP"/>
	<Product specieID="Gibg"/>
	
	<forwardRate>0.125e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 5h1) pLR -> LR -->
   <Reaction name = "pLR_dephos" id="pLR_dephos">
	<Reactant specieID="pLR"/>
	<Product specieID="LR"/>

	<forwardRate>0.25e-05</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 5h2) ppLR -> pLR -->
   <Reaction name = "ppLR_dephos" id="ppLR_dephos">
	<Reactant specieID="ppLR"/>
	<Product specieID="pLR"/>

	<forwardRate>0.25e-05</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>



    
<!-- 6a) GasGTP -> GasGDP    -->
    <Reaction name = "GasGTP_disso" id="GasGTP_disso">
	<Reactant specieID="GasGTP"/>
	<Product specieID="GasGDP"/>

        <forwardRate>10e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 7a) GasGDP + Gbg -> Gs    -->
    <Reaction name = "Gs_form" id="Gs_form">
	<Reactant specieID="GasGDP"/>
        <Reactant specieID="Gsbg"/>
	<Product specieID="Gs"/>

        <forwardRate>100e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    
<!-- 6b) GaiGTP -> GaiGDP    -->
    <Reaction name = "GaiGTP_disso" id="GaiGTP_disso">
	<Reactant specieID="GaiGTP"/>
	<Product specieID="GaiGDP"/>

        <forwardRate>0.125e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    
<!-- 7b) GaiGDP + Gbg -> Gi    -->
    <Reaction name = "Gi_form" id="Gi_form">
	<Reactant specieID="GaiGDP"/>
        <Reactant specieID="Gibg"/>
	<Product specieID="Gi"/>

        <forwardRate>1.25e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>



<!-- 1a) GasGTP + AC1 <-> AC1GasGTP   -->

    <Reaction name = "GasGTP_AC1_reac" id="GasGTP_AC1_reac">
	<Reactant specieID="GasGTP"/>
	<Reactant specieID="AC1"/>
	<Product specieID="AC1GasGTP"/>

	<forwardRate>0.0385e-3</forwardRate>
	<reverseRate>10e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>


<!-- 1b) AC1Gas + CamCa4 <-> AC1GasGTPCamCa4    -->
    <Reaction name = "AC1GasGTP_CamCa4_Reac" id="AC1GasGTP_CamCa4_Reac">
	<Reactant specieID="AC1GasGTP"/>
	<Reactant specieID="CamCa4"/>
	<Product specieID="AC1GasGTPCamCa4"/>

	<forwardRate>6.0e-6</forwardRate>
	<reverseRate>0.9e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    
<!-- 1c) AC1GasGTPCamCa4 + ATP <-> AC1GasGTPCamCa4ATP    -->
    <Reaction name = "AC1GasGTPCamCa4_ATP_Reac" id="AC1GasGTPCamCa4_ATP_Reac">
	<Reactant specieID="AC1GasGTPCamCa4"/>
	<!--Reactant specieID="ATP"/-->
	<Product specieID="AC1GasGTPCamCa4ATP"/>

	<!--if ATP:forwardRate>0.01e-3</forwardRate-->
	<forwardRate>20</forwardRate>
	<reverseRate>2273e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 1d) AC1GasGTPCamCa4ATP -> AC1GasGTPCamCa4 + cAMP    -->
    <Reaction name = "AC1GasGTPCamCa4ATP_diss" id="AC1GasGTPCamCa4ATP_diss">
	<Reactant specieID="AC1GasGTPCamCa4ATP"/>
	<Product specieID="cAMP"/>
	<Product specieID="AC1GasGTPCamCa4"/>

	<forwardRate>0.02842</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    
<!-- 2a) GaiGTP + AC1GasGTP <-> AC1GasGTPGaiGTP   -->
    <Reaction name = "GaiGTP_AC1GasGTP_reac" id="GaiGTP_AC1GasGTP_reac">
	<Reactant specieID="GaiGTP"/>
	<Reactant specieID="AC1GasGTP"/>
	<Product specieID="AC1GasGTPGaiGTP"/>

	<forwardRate>0.0625e-3</forwardRate>
	<reverseRate>10e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 2b) AC1GasGTPGaiGTP + CamCa4 <-> AC1GasGTPGaiGTPCamCa4    -->
    <Reaction name = "AC1GasGTPGaiGTP_CamCa4_Reac" id="AC1GasGTPGaiGTP_CamCa4_Reac">
	<Reactant specieID="AC1GasGTPGaiGTP"/>
	<Reactant specieID="CamCa4"/>
	<Product specieID="AC1GasGTPGaiGTPCamCa4"/>

	<forwardRate>0.006e-3</forwardRate>
	<reverseRate>0.9e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    <!-- 2c) AC1GasGTPGaiGTPCamCa4 + ATP <->AC1GasGTPGaiGTPCamCa4ATP    -->
    <!-- forward and backward rates (maybe) should be 100% lower to match 2d-->
    <Reaction name = "AC1GasGTPGaiGTPCamCa4_ATP_Reac" id="AC1GasGTPGaiGTPCamCa4_ATP_Reac">
	<Reactant specieID="AC1GasGTPGaiGTPCamCa4"/>
	<!--Reactant specieID="ATP"/-->
	<Product specieID="AC1GsGiCamCa4ATP"/>

	<!--if ATP:forwardRate>0.01e-3</forwardRate-->
	<forwardRate>20</forwardRate>
	<reverseRate>2273e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 2d) AC1GasGTPGaiGTPCamCa4ATP ->AC1GasGTPGaiGTPCamCa4 + cAMP    -->
    <Reaction name = "AC1GsGiCamCa4ATP_diss" id="AC1GsGiCamCa4ATP_diss">
	<Reactant specieID="AC1GsGiCamCa4ATP"/>
	<Product specieID="cAMP"/>
	<Product specieID="AC1GasGTPGaiGTPCamCa4"/>

	<forwardRate>2.842e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 3a) GaiGTP + AC1Cam4 <-> AC1CamCa4GaiGTP   -->
    <Reaction name = "GaiGTP_AC1CamCa4_reac" id="GaiGTP_AC1CamCa4_reac">
	<Reactant specieID="GaiGTP"/>
	<Reactant specieID="AC1CamCa4"/>
	<Product specieID="AC1GaiGTPCamCa4"/>

	<forwardRate>0.0625e-3</forwardRate>
	<reverseRate>10e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 3b) AC1GaiGTP + CamCa4 <-> AC1GaiGTPCamCa4    -->
<!-- 3c) AC1GaiGTPCamCa4 + ATP <-> AC1GaiGTPCamCa4ATP    -->
    <Reaction name = "AC1GaiGTPCamCa4_ATP_Reac" id="AC1GaiGTPCamCa4_ATP_Reac">
	<Reactant specieID="AC1GaiGTPCamCa4"/>
	<!--Reactant specieID="ATP"/-->
	<Product specieID="AC1GaiGTPCamCa4ATP"/>

	<!--if ATP:forwardRate>0.01e-3</forwardRate-->
	<forwardRate>20</forwardRate>
	<reverseRate>2273e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!-- 3d) AC1GaiGTPCamCa4ATP -> AC1GaiGTPCamCa4 + cAMP    -->
    <Reaction name = "AC1GaiGTPCamCa4ATP_diss" id="AC1GaiGTPCamCa4ATP_diss">
	<Reactant specieID="AC1GaiGTPCamCa4ATP"/>
	<Product specieID="cAMP"/>
	<Product specieID="AC1GaiGTPCamCa4"/>

	<forwardRate>0.5684e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 5) AC1 + CamCa4 <-> AC1Cam    -->
    <Reaction name = "AC1CamCa4_Reac" id="AC1CamCa4_Reac">
	<Reactant specieID="AC1"/>
	<Reactant specieID="CamCa4"/>
	<Product specieID="AC1CamCa4"/>

	<forwardRate>0.006e-3</forwardRate>
	<reverseRate>0.9e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 6) AC1Cam + ATP <-> AC1CamATP    -->
    <Reaction name = "AC1CamCa4ATP_bind" id="AC1CamCa4ATP_bind">
	<Reactant specieID="AC1CamCa4"/>
	<!--Reactant specieID="ATP"/-->
	<Product specieID="AC1CamCa4ATP"/>

	<!--if ATP:forwardRate>0.01e-3</forwardRate-->
	<forwardRate>20</forwardRate>
	<reverseRate>2273e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 7) AC1CamATP -> AC1Cam +cAMP    -->
    <Reaction name = "AC1CamCa4ATP_disso" id="AC1CamCa4ATP_disso">
	<Reactant specieID="AC1CamCa4ATP"/>
	<Product specieID="cAMP"/> 
	<Product specieID="AC1CamCa4"/>

	<forwardRate>5.684e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
    
<!-- 6a) AC1GasGTP + GasGTP <-> AC1GasGTPGaiGTP    -->
    <Reaction name = "AC1GaiGTP_GasGTP_Reac" id="AC1GaiGTP_GasGTP_Reac">
	<Reactant specieID="AC1GaiGTP"/>
	<Reactant specieID="GasGTP"/>
	<Product specieID="AC1GasGTPGaiGTP"/>

	<forwardRate>0.0000625</forwardRate>
	<reverseRate>10e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
<!--AC1 is fine - thermodynamically balanced.  But what is source for affinity to ATP?  2273 is very large backward rate;large Kb prevents large E-S intermidiate complex, Kd(cAMP)=2.3(+-)0.8 mM, low affinity -->


<!-- 8) AC8 + CamCa4 <-> AC8Cam   -->
    <Reaction name = "AC8_CamCa4_bind" id="AC8_CamCa4_bind">
	<Reactant specieID="AC8"/>
	<Reactant specieID="CamCa4"/>
	<Product specieID="AC8CamCa4"/>

	<forwardRate>0.00125e-3</forwardRate>
	<reverseRate>1e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 9) AC8Cam + ATP <-> AC8CamATP   -->
    <Reaction name = "AC8CamCa4_ATP_bind" id="AC8CamCa4_ATP_bind">
	<Reactant specieID="AC8CamCa4"/>
	<!--Reactant specieID="ATP"/-->
	<Product specieID="AC8CamCa4ATP"/>

	<!--if ATP:forwardRate>0.01e-3</forwardRate-->
	<forwardRate>20</forwardRate>
	<reverseRate>2273e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!-- 10) AC8CamATP -> AC8Cam + cAMP   -->
    <Reaction name = "AC8CamCa4ATP_disso" id="AC8CamCa4ATP_disso">
	<Reactant specieID="AC8CamCa4ATP"/>
	<Product specieID="cAMP"/>
	<Product specieID="AC8CamCa4"/>

	<forwardRate>2.842e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>


<!-- ******* PKA from Asia Hippo Model ********* -->     
    <!--1) PKA + 2camp <-> PKAcAMP2 -->
    <Reaction name = "PKA_bind" id="PKA_bind">
	<Reactant specieID="PKA"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP2"/>


        <forwardRate> 0.261e-6 </forwardRate>
	<reverseRate> 0.060e-3 </reverseRate>
    </Reaction>

    <!--2) PKAcAMP2 + 2cAMP <-> PKAcAMP4 -->
    <Reaction name = "PKAcAMP2_bind" id="PKAcAMP2_bind">
	<Reactant specieID="PKAcAMP2"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP4"/>

	<forwardRate> 0.35e-6 </forwardRate>
	<reverseRate> 0.6e-3 </reverseRate>
    </Reaction>

<!--3) PKAcAMP4 <-> 2PKAr(as dimer) + 2PKAc(monomers) -->
    <Reaction name = "PKAcAMP4_diss" id="PKAcAMP4_diss">
	<Reactant specieID="PKAcAMP4"/>
	<Product specieID="PKAr" />
	<Product specieID="PKAc" n="2"/>  

	<forwardRate> 0.24e-3 </forwardRate>
	<reverseRate> 0.0255e-3 </reverseRate>
    </Reaction>

<!-- PDE Part -->
    <!-- PDE4 buff for cAMP cAMP + PDE4  <-> PDE4cAMP -->
    <Reaction name = "PDE4 enzyme1" id="PDE4bind">
        <Reactant specieID="PDE4"           />
        <Reactant specieID="cAMP"            />
        <Product  specieID="PDE4cAMP"       />
        <forwardRate> 0.0216e-03  </forwardRate>
        <reverseRate> 68.95e-03    </reverseRate>
    </Reaction>

    <!--  PDE4cAMP -> AMP + PDE4 -->
    <Reaction name = "PDE4 actvcomp" id="PDE4cat">
        <Reactant specieID="PDE4cAMP"       />
        <Product  specieID="PDE4"           />
        <Product  specieID="AMP"             />
        <forwardRate> 17.233e-03    </forwardRate>
        <reverseRate> 0            </reverseRate>
</Reaction>

   <!--   PKAc + PDE4 -> PKAcPDE4 -->
    <Reaction name = "PDE4 phosp1" id="phospPDE41">
        <Reactant specieID="PKAc"            />
        <Reactant specieID="PDE4"           />
        <Product  specieID="PKAcPDE4"       />
        <forwardRate> 4.28e-7  </forwardRate>
        <reverseRate>  0.00056    </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--   PKAcPDE4 -> PKAc + pPDE4 -->
    <Reaction name = "PDE4 phosp2" id="phospPDE42">
        <Reactant specieID="PKAcPDE4"       />
        <Product  specieID="pPDE4"          />
        <Product  specieID="PKAc"            />
        <forwardRate> 0.000125     </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--   pPDE4 -> PDE4 -->
    <Reaction name = "PDE4 d_phosp" id="dphospPDE4">
        <Reactant specieID="pPDE4"          />
        <Product  specieID="PDE4"           />
        <forwardRate> 2.5e-6    </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--   cAMP + pPDE4  <-> pPDE4cAMP -->
    <Reaction name = "pPDE4 enzyme1" id="pPDE4bind">
        <Reactant specieID="pPDE4"           />
        <Reactant specieID="cAMP"             />
        <Product  specieID="pPDE4cAMP"       />
        <forwardRate> 0.000433175   </forwardRate>
        <reverseRate> 1.379 </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--   pPDE4cAMP -> AMP + pPDE4 -->
    <Reaction name = "pPDE4 actvcomp" id="pPDE4cat">
        <Reactant specieID="pPDE4cAMP"       />
        <Product  specieID="pPDE4"           />
        <Product  specieID="AMP"              />
        <forwardRate>0.3446674   </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--   PDE4cAMP + PKAc  <-> PKAc_PDE4_cAMP -->
    <Reaction name = "PKAc_PDE4_cAMP-bind" id="PKAc_PDE4_cAMP-bind">
        <Reactant specieID="PDE4cAMP"        />
        <Reactant specieID="PKAc"             />
        <Product  specieID="PKAc_PDE4_cAMP"  />
        <forwardRate> 4.280e-7  </forwardRate>
        <reverseRate>  0.00056    </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

    <!--  PKAc_PDE4_cAMP -> pPDE4cAMP + PKAc -->
    <Reaction name = "PKAc_PDE4_cAMP-diss" id="PKAc_PDE4_cAMP-diss">
        <Reactant specieID="PKAc_PDE4_cAMP"  />
        <Product  specieID="pPDE4cAMP"       />
        <Product  specieID="PKAc"             />
        <forwardRate> 0.000125    </forwardRate>
        <reverseRate> 0            </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>
      
    
 <!-- PDE2 buff for cAMP, two steps-->
<Reaction name = "PDE2+cAMP--PDE2cAMP" id="PDE2+cAMP--PDE2cAMP">
        <Reactant specieID="PDE2"                  />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="PDE2cAMP"              />

        <forwardRate> 0.00002e-3        </forwardRate>
	<reverseRate> 0.5e-3        </reverseRate>
     
</Reaction>

 <Reaction name = "PDE2cAMP+cAMP--PDE2cAMP2" id="PDE2cAMP+cAMP--PDE2cAMP2">
        <Reactant specieID="PDE2cAMP"              />
        <Reactant specieID="cAMP"                   />
	<Product specieID="PDE2cAMP2"              />
        <forwardRate> 0.0059e-3         </forwardRate>
        <reverseRate> 0.5e-3           </reverseRate>
    </Reaction>
  
    <Reaction name = "PDE2cAMP2--PDE2cAMP+AMP" id="PDE2cAMP2--PDE2cAMP+AMP">
	<Reactant specieID="PDE2cAMP2"              />
        <Product specieID="PDE2cAMP"              />
        <Product  specieID="AMP"                    />
        <forwardRate> 5.4e-3         </forwardRate>
        <reverseRate> 0.0           </reverseRate>
    </Reaction>
    

<!--1) PDE1 + CamCa4 <-> PDE1Cam -->
       <Reaction name = "PDE1CamCa4_bind" id="PDE1CamCa4_bind">
	<Reactant specieID="PDE1"/>
	<Reactant specieID="CamCa4"/>
	<Product specieID="PDE1CamCa4"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!--2) PDE1Cam + cAMP <-> PDE1Cam_cAMP(=PDE1cAMP) -->
       <Reaction name = "PDE1CamCa4cAMP_bind" id="PDE1CamCa4cAMP_bind">
	<Reactant specieID="PDE1CamCa4"/>
	<Reactant specieID="cAMP"/>
	<Product specieID="PDE1CamCa4cAMP"/>

	<forwardRate>0.0046e-3</forwardRate>
	<reverseRate>44e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

<!--3) PDE1cAMP -> PDE1Cam + AMP -->
       <Reaction name = "PDE1cAMP_disso" id="PDE1cAMP_disso">
	<Reactant specieID="PDE1CamCa4cAMP"/>
	<Product specieID="PDE1CamCa4"/>
	<Product specieID="AMP"/>

	<forwardRate>11e-3</forwardRate>
	<reverseRate>0</reverseRate>
	<Q10>0.2</Q10>
       </Reaction>

</ReactionScheme>
